opentrons/protocol-designer 8.1.3
schemaVersion: 8
protocolName: GASP 25ul
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p20_single_gen2: {mount: right}
  p20_multi_gen2: {mount: left}
moduleLocationUpdate:
  temperatureModuleV2: {location: 10}
labwareLocationUpdate:
  Opentrons OT-2 96 Tip Rack 20 µL: {loadName: opentrons_96_tiprack_20ul, namespace: opentrons, version: 1, location: 4}
  Opentrons 10 Tube Rack with NEST 4x50 mL, 6x15 mL Conical: {loadName: opentrons_10_tuberack_nest_4x50ml_6x15ml_conical, namespace: opentrons, version: 1, location: 2}
  Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt (1): {loadName: opentrons_96_wellplate_200ul_pcr_full_skirt, namespace: opentrons, version: 2, location: 1}
  Opentrons 24 Tube Rack with NEST 2 mL Screwcap: {loadName: opentrons_24_tuberack_nest_2ml_screwcap, namespace: opentrons, version: 1, location: 5}
pipetteTiprackAssignments:
  p20_single_gen2: [opentrons/opentrons_96_tiprack_20ul/1]
  p20_multi_gen2: [opentrons/opentrons_96_tiprack_20ul/1]
ingredients:
  - Nuclease Free Water
  - OneTaq 2X Master Mix
  - Forward Primer
  - Reverse Primer
  - Template DNA: {serialize: true}
ingredLocations:
  Opentrons 10 Tube Rack with NEST 4x50 mL, 6x15 mL Conical:
    OneTaq 2X Master Mix {volume: 1000}: A2
    Forward Primer {volume: 1000}: B2
    Nuclease Free Water {volume: 1000}: A1
    Reverse Primer {volume: 1000}: B1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 12.5
  path: single
  changeTip: once
  aspirate_labware: Opentrons 10 Tube Rack with NEST 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  dispense_labware: Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt (1)
  dispense_wells: A10-H10, A11-H11, A12-H12
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: Opentrons 10 Tube Rack with NEST 4x50 mL, 6x15 mL Conical
  aspirate_wells: B2
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  dispense_labware: Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt (1)
  dispense_wells: A10-H10, A11-H11, A12-H12
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: Opentrons 10 Tube Rack with NEST 4x50 mL, 6x15 mL Conical
  aspirate_wells: B1
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  dispense_labware: Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt (1)
  dispense_wells: A10-H10, A11-H11, A12-H12
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 10
  times: 2
  changeTip: once
  labware: Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt (1)
  wells: A10-A12
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  mix_mmFromBottom: 1
  dropTip_location: trashBin
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons OT-2 96 Tip Rack 20 µL, wellName: A1}
- aspirate: {pipetteId: p20_single_gen2, volume: 12.5, labwareId: Opentrons 10 Tube Rack with NEST 4x50 mL, 6x15 mL Conical, wellName: A2, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 3.78}
- dispense: {pipetteId: p20_single_gen2, volume: 12.5, labwareId: Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt (1), wellName: A10, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 3.78}
- aspirate: {pipetteId: p20_single_gen2, volume: 12.5, labwareId: Opentrons 10 Tube Rack with NEST 4x50 mL, 6x15 mL Conical, wellName: A2, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 3.78}
- dispense: {pipetteId: p20_single_gen2, volume: 12.5, labwareId: Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt (1), wellName: B10, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 3.78}
- aspirate: {pipetteId: p20_single_gen2, volume: 12.5, labwareId: Opentrons 10 Tube Rack with NEST 4x50 mL, 6x15 mL Conical, wellName: A2, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 3.78}
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